PsychoPy2experiment version="2020.2.10"
Settings
  Data filename = u'data/%s_%s_%s' % (expInfo['被试编号'], expName, expInfo['date'])
  Experiment info = {'被试编号': '', '性别': '', '驾龄': '', '实验类型': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = Iowa Gambling Task
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Routines
  Routine trial
    ImageComponent A
      image = .\image\button.png
      pos = [-0.6,0]
      saveStartStop = False
      size = [0.3,0.42]
      startVal [time (s)] = 0.0
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    ImageComponent B
      image = .\image\button.png
      pos = [-0.2,0]
      saveStartStop = False
      size = [0.3,0.42]
      startVal [time (s)] = 0.0
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    ImageComponent C
      image = .\image\button.png
      pos = [0.2,0]
      saveStartStop = False
      size = [0.3,0.42]
      startVal [time (s)] = 0.0
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    ImageComponent D
      image = .\image\button.png
      pos = [0.6,0]
      saveStartStop = False
      size = [0.3,0.42]
      startVal [time (s)] = 0.0
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    MouseComponent mouse
      clickable = A,B,C,D
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Py
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      End Routine:
        if len(mouse.clicked_name): trials.addData('mouse.clicked_name', mouse.clicked_name[0])
        cur_deck = mouse.clicked_name[0]
  Routine choose
    TextComponent state_Score
      font = Microsoft YaHei UI
      letterHeight = 0.1
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent state_Gain
      font = Microsoft YaHei UI
      letterHeight = 0.1
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    VariableComponent Forfeit
      saveEndRoutine = False
      saveStartStop = False
      startRoutineValue = 0
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    VariableComponent Gain
      saveEndRoutine = False
      saveStartStop = False
      startRoutineValue = 0
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    CodeComponent Key_Logic
      Code Type = Py
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      Begin Routine:
        ran = random.random()
        rate = 0
        if cur_deck == "A":
            Atimes += 1
            rate = 0.5
            if ran <= rate:
                Forfeit = -250
            Gain = 100
        elif cur_deck == "B":
            Btimes += 1
            rate = 0.1
            if ran <= rate:
                Forfeit = -1250
            Gain = 100
        elif cur_deck == "C":
            Ctimes += 1
            rate = 0.5
            if ran <= rate:
                Forfeit = -50
            Gain = 50
        elif cur_deck == "D":
            Dtimes += 1
            rate = 0.1
            if ran <= rate:
                Forfeit = -250
            Gain = 50
        Current = Gain + Forfeit
        Score += Current
        state_Score.setText('您的余额：'+str(Score)+'元')
        if Current == 0:
            state_Gain.setText('输赢相抵！')
            state_Gain.setColor('white')
        elif Current > 0:
            state_Gain.setText('恭喜您赢了'+str(Current)+'元')
            state_Gain.setColor('green')
        else :
            state_Gain.setText('抱歉，您输了'+str(abs(Current))+'元')
            state_Gain.setColor('red')
      End Routine:
        trials.addData('Atimes',Atimes)
        trials.addData('Btimes',Btimes)
        trials.addData('Ctimes',Ctimes)
        trials.addData('Dtimes',Dtimes)
        trials.addData('Score',Score)
    CodeComponent Necessary
      Code Type = Py
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      Before Experiment:
        import random
        random.seed(10)
      Begin Experiment:
        if str(expInfo['实验类型'])!='1':
            bgm = sound.Sound('./sound/'+str(expInfo['实验类型'])+'.wav')
            bgm.play(loops=-1)
      End Experiment:
        trials.addData('C+D-A-B', Ctimes+Dtimes-Atimes-Btimes)
        trials.addData('Atimes',Atimes)
        trials.addData('Btimes',Btimes)
        trials.addData('Ctimes',Ctimes)
        trials.addData('Dtimes',Dtimes)
        trials.addData('Score',Score)
    VariableComponent Atimes
      saveEndRoutine = False
      saveStartStop = False
      startExpValue = 0
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    VariableComponent Btimes
      saveEndRoutine = False
      saveStartStop = False
      startExpValue = 0
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    VariableComponent Ctimes
      saveEndRoutine = False
      saveStartStop = False
      startExpValue = 0
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    VariableComponent Dtimes
      saveEndRoutine = False
      saveStartStop = False
      startExpValue = 0
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    VariableComponent Score
      saveEndRoutine = False
      saveStartStop = False
      startExpValue = 2000
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  Routine inst
    TextComponent instruction
      font = Microsoft YaHei UI
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        欢迎您参与本次实验！
        在实验中，屏幕上会呈现四张不同的纸牌，
        每次您可以从四张纸牌中任意选择一张(用鼠标点击即可)，
        每选一张，你会赢一些钱，但同时也可能会输一些钱。
        屏幕下方显示着你的初始钱数(你有2000元的本金)。
        这四张纸牌中有几张是好牌，如果您能尽量避免差的
        纸牌，从好牌中选的次数越多，您就可以赢得更多。
        您一共有100次选择的机会，可以通过点击扑克牌
        找到规律，以获得更多的奖励。
    TextComponent key_hint
      color = green
      font = Microsoft YaHei UI
      letterHeight = 0.05
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 如果您看懂了以上内容，请点击空格键开始实验。
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent inst_code
      Code Type = Py
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      Begin Routine:
        instruction.wrapWidth = 1.3
  Routine end
    TextComponent thank
      font = Microsoft YaHei UI
      letterHeight = 0.07
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent end_score
      font = Microsoft YaHei UI
      letterHeight = 0.06
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent end_code
      Code Type = Py
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      Begin Routine:
        end_score.setText('您最后拥有'+str(Score)+'元')
        thank.setText('感谢您参与本次实验！\n您的被试编号为:'+str(expInfo['被试编号'])+\
        '\n请您以此编号完成后续的\n《一般决策风格问卷》\n谢谢！')
        bgm.stop()
    KeyboardComponent end_input
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine inst
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = 100
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    Routine trial
    Routine choose
  LoopTerminator trials
  Routine end
